PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'sex': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['dots.js']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 960]
  expName = Serial_Dependence_U
  keyboardBackend = ioHub
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Routines
  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = 0.5
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    PolygonComponent BKG_9
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Response
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    CodeComponent Direction_2
      Code Type = JS
      disabled = True
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      Before JS Experiment:
        window.keyDuration_global = 9999;
      Begin JS Routine:
        // ========== 初始化参数 ==========
        let direction = window.trial_direction;
        let coherence = parseFloat(Coherence1);
        let totalDots = 360;
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let fps = 60;
        let speed = (1.5 * cm_to_px_x) / fps;
        console.log("✅ 读取到的方向是：", direction);
        console.log("✅ 读取到的coherence是：", coherence);
        // 如果是 undefined，说明设置失败
        // ========== 初始化状态变量 ==========
        window.keyPressed = false;
        window.keyReleased = false;
        window.pressStart = null;
        window.releaseTime = null;
        window.keyDuration = 9999;

        // ========== 创建 canvas ==========
        if (!window.rdkCanvas) {
          const root = document.getElementById("root");
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;
        }

        // ========== 初始化 RDK ==========
        window.rdk = new RDK({
          canvasId: "canvas",
          direction: direction,
          coherence: coherence,
          nDots: totalDots,
          dotColor: "white",
          speed: 0,
          dotSize: 0.03 * cm_to_px_x,
          fieldRadius: 3.5 * cm_to_px_x,
          noiseMode: "inertial",
          x_scale: x_scale,
          y_scale: y_scale
        });
        window.rdk.setSignalDots(coherence);
        window.rdkStart = performance.now();
        window.rdkDuration = 6000;
        window.rdkRunning = true;

        // ========== 键盘事件绑定 ==========
        window.keyDownHandler = function (event) {
          if (event.key === "ArrowDown" && !window.keyPressed) {
            window.keyPressed = true;
            window.pressStart = performance.now();
            window.rdk.speed = speed;
            console.log("⬇️ 按下 ↓ 键，RDK 开始运动");
          }
        };


        window.keyUpHandler = function (event) {
          if (event.key === "ArrowDown" && window.keyPressed && !window.keyReleased) {
            window.keyReleased = true;
            window.releaseTime = performance.now();
            window.keyDuration = window.releaseTime - window.pressStart;
            window.rdk.speed = speed;
            window.rdk.direction =direction;
            window.rdk.coherence =coherence;
            console.log("🔴 松开 ↓ 键，keyDuration =", window.keyDuration.toFixed(2), "ms");
            console.log("✅ 读取到的方向是：", direction);
        console.log("✅ 读取到的coherence是：", coherence);
          }
        };


        window.addEventListener("keydown", window.keyDownHandler);
        window.addEventListener("keyup", window.keyUpHandler);
      Each JS Frame:
        // 1. 每帧绘制 RDK
        if (window.rdk && window.rdkRunning) {
          window.rdk.updateAndDraw(true);
        }

        // 2. 获取当前运行时间
        const elapsed = performance.now() - window.rdkStart;

        // 3. 判断是否松开键，或者超时（自动结束）
        if (window.keyReleased || elapsed >= window.rdkDuration) {
          if (!window.keyReleased) {
            window.keyDuration = 9999;  // 没按键则为默认值
            if (window.rdk) window.rdk.speed = 0;
          }
          window.rdkRunning = false;
          continueRoutine = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("keyDuration",  window.keyDuration.toFixed(2));

        // 清除画布
        if (window.rdkCanvas) {
          const ctx = window.rdkCanvas.getContext("2d");
          ctx.clearRect(0, 0, window.rdkCanvas.width, window.rdkCanvas.height);
        }
    PolygonComponent BKG_4
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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    CodeComponent code_5
      Code Type = JS
      Before JS Experiment:
        window.keyDuration_global = 9999;
        function ensureCanvasReady() {
          if (!window.rdkCanvas) {
            const canvas = document.createElement("canvas");
            canvas.id = "canvas";
            canvas.width = psychoJS.window.size[0];
            canvas.height = psychoJS.window.size[1];
            canvas.style.position = "absolute";
            canvas.style.top = "0";
            canvas.style.left = "0";
            canvas.style.zIndex = "10";
            canvas.style.backgroundColor = "transparent";
            document.getElementById("root").appendChild(canvas);
            window.rdkCanvas = canvas;
          }
        }
      Begin JS Routine:
        // ========== 1. 初始化关键参数 ==========
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let fieldRadius = 3.5 * cm_to_px_x;
        let fieldCenterX = window.innerWidth / 2;
        let fieldCenterY = window.innerHeight / 2;
        let dotRadius = 0.03 * cm_to_px_x;
        let dotSpeed = 1.75 * cm_to_px_x;
        let direction = trial_direction * Math.PI / 180;
        let coh = 0;
        let numDots = 360;

        // 保存给其他阶段用
        window.fieldRadius = fieldRadius;
        window.fieldCenterX = fieldCenterX;
        window.fieldCenterY = fieldCenterY;
        window.dotSpeed = dotSpeed;

        // ========== 2. 创建 dot 阵列（reproduction 专用） ==========
        window.reproDots = [];
        for (let i = 0; i < numDots; i++) {
          const r = Math.sqrt(Math.random()) * fieldRadius;
          const a = Math.random() * 2 * Math.PI;
          const x = fieldCenterX + r * Math.cos(a);
          const y = fieldCenterY + r * Math.sin(a);
          const dot = new Dot(x, y, dotRadius, 0, direction);  // 初始速度为0
          window.reproDots.push(dot);
        }
        window.keyPressed = false;
        window.keyReleased = false;
        window.pressStart = null;
        window.releaseTime = null;
        window.reproducedDuration = null;

        window.addEventListener("keydown", function (event) {
          if (event.key === "ArrowDown" && !window.keyPressed) {
            window.keyPressed = true;
            window.pressStart = performance.now();

            // 启动所有 dot 的速度
            for (let dot of window.reproDots) {
              dot.speed = window.dotSpeed;
            }

            console.log("⬇️ 再现开始");
          }
        });

        window.addEventListener("keyup", function (event) {
          if (event.key === "ArrowDown" && window.keyPressed && !window.keyReleased) {
            window.keyReleased = true;
            window.releaseTime = performance.now();
            window.reproducedDuration = window.releaseTime - window.pressStart;

            // 停止 dot
            for (let dot of window.reproDots) {
              dot.speed = 0;
            }

            console.log("🔴 再现结束，时长 =", window.reproducedDuration.toFixed(0), "ms");
            continueRoutine = false;
          }
        });
      Each JS Frame:
        ensureCanvasReady();
        const now = performance.now();
        const elapsed = now - startTime;
        let coh = 0;//parseFloat(Coherence1)
        const ctx = window.rdkCanvas.getContext("2d");

        ctx.clearRect(0, 0, window.rdkCanvas.width, window.rdkCanvas.height);

        const dt = 1 / 60;
        for (let dot of window.reproDots) {
          const mode = (Math.random() < coh) ? "coherent" : "random";
          dot.updateDirection(dt, mode, coh);  // 你原有的 dot 方法
          dot.draw(ctx);
        }
      End JS Routine:
        psychoJS.experiment.addData("keyDuration",  window.reproducedDuration.toFixed(0));
        window.keyDuration = window.reproducedDuration.toFixed(0);
        // 清除画布
        if (window.rdkCanvas) {
          const ctx = window.rdkCanvas.getContext("2d");
          ctx.clearRect(0, 0, window.rdkCanvas.width, window.rdkCanvas.height);
        }
  Routine Cue
    RoutineSettingsComponent Cue
      stopVal [duration (s)] = 0.5
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    PolygonComponent BKG_8
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = T
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  Routine Intro
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    PolygonComponent BKG
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
      units = pix
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    ImageComponent Ins_image_2
      image = instr.png
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size [set every repeat] = (1.5, 2)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Mask_2
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    PolygonComponent BKG_6
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
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    PolygonComponent Fixation_4
      disabled = True
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent Direction_3
      Code Type = JS
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      Begin JS Routine:
        // ========== 参数定义 ==========
        const fps = 60;
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let cm_to_px_y = psychoJS.window.size[1] * y_scale;
        let speed = (1.75 * cm_to_px_x) / fps;
        let direction = window.trial_direction
        console.log(`📏 帧率=${fps} Hz，速度=${speed.toFixed(2)} px/frame`);
        console.log("🔍 当前 x_scale =", x_scale);

        // ========== 创建 Canvas ==========
        if (!window.rdkCanvas) {
          const root = document.getElementById("root");
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;
        }

        // ========== 初始化纯噪声 RDK ==========
        window.rdk = new RDK({
          canvasId: "canvas",
          type: "mask",               // 遮罩类型（非按键模式）
          noiseMode: "walk",          // 每帧都换方向
          direction: 0,               // 无效方向（因为 coherence = 0）
          coherence: 0,               // ✅ 纯噪声
          nDots: 360,
          speed: speed,
          dotSize: 0.03 * cm_to_px_x,
          fieldRadius: 3.5 * cm_to_px_x,
          dotColor: "white"
        });

        // ========== 启动标志 ==========
        window.rdkStart = performance.now();
        window.rdkDuration = 500;  // 0.6 秒
        window.rdkRunning = true;

        console.log("✅ RDK mask：纯噪声，持续 0.5 秒");
      Each JS Frame:
        if (window.rdkRunning && window.rdk) {
          // 每帧更新 RDK
          window.rdk.updateAndDraw();

          // 检查是否达到 TimeDur 秒
          const elapsed = performance.now() - window.rdkStart;
          if (elapsed >= window.rdkDuration) {
            window.rdkRunning = false;
            continueRoutine = false;
            console.log(`⏱ TimeDur 达成，本轮停止，已运行 ${(elapsed / 1000).toFixed(3)} 秒`);
          }
        } else {
          // fallback: 若 RDK 没有初始化成功
          console.warn("⚠️ RDK 尚未初始化或已停止运行！");
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
  Routine Feedback_Time
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    PolygonComponent BKG_7
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent Initial_Feedback_code_3
      Code Type = JS
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    CodeComponent Feedback_code_5
      Code Type = JS
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      Begin JS Experiment:
        // === 初始化 ===
        PresentDur = 0.5;
        psychoJS.window.mouseVisible = false;

        // 初始化所有圆为白色
        color_1 = [1, 1, 1];
        color_2 = [1, 1, 1];
        color_3 = [1, 1, 1];
        color_4 = [1, 1, 1];
        color_5 = [1, 1, 1];
      Begin JS Routine:
        // 获取响应时间（ms）与目标时间（s）
        let timeResp = window.keyDuration;
        let timeTarget = parseFloat(TimeDur);

        let feedbackID = 0;
        // 如果是实验阶段，则跳过整个反馈 routine
        if (typeof window.Block_id !== 'undefined' && window.Block_id >= window.Practice_num) {
            continueRoutine = false;
            console.log("⏭️ 实验阶段跳过反馈：Block_id = " + window.Block_id);
        } else {
            console.log("✅ 练习阶段显示反馈：Block_id = " + window.Block_id);
        }

        if (TrialType === "Time" && timeResp !== 9999) {
            let timeRespSec = timeResp / 1000;
            let diff = timeRespSec - timeTarget;
            let relErr = Math.abs(diff) / timeTarget;

            if (relErr <= 0.05) {
                feedbackID = 3; color_3 = [0, 0.9, 0.3];    // ✅ 正确 ±5%
            } else if (-diff / timeTarget >= 0.3) {
                feedbackID = 1; color_1 = [1, 0, 0];        // ❌ 过早 ≥30%
            } else if (diff / timeTarget >= 0.3) {
                feedbackID = 5; color_5 = [1, 0, 0];        // ❌ 过晚 ≥30%
            } else if (diff / timeTarget >= 0.05) {
                feedbackID = 4; color_4 = [1, 0.3, 0.4];    // ⚠ 稍晚
            } else if (-diff / timeTarget >= 0.05) {
                feedbackID = 2; color_2 = [1, 0.3, 0.4];    // ⚠ 稍早
            }

            console.log(`🧠 Feedback 判定: Resp=${timeRespSec.toFixed(2)}s | Target=${timeTarget}s | relErr=${relErr.toFixed(3)} | ID=${feedbackID}`);
        } else {
            feedbackID = 0;  // 没有松键
            console.log("⚠️ 未松键，反馈 ID = 0");
        }

        // 写入 feedbackID
        psychoJS.experiment.addData("FeedbackID_T", feedbackID);
      End JS Routine:
        keyDuration = 10;
        Key_pressed = false;
        Key_release = false;
        color_1 = [1, 1, 1];
        color_2 = [1, 1, 1];
        color_3 = [1, 1, 1];
        color_4 = [1, 1, 1];
        color_5 = [1, 1, 1];

        psychoJS.eventManager.clearEvents({"eventType": "keyboard"});
    PolygonComponent feedback_1_T
      fillColor [set every repeat] = $color_1
      lineColor [set every repeat] = $color_1
      lineWidth = 0.5
      nVertices = 3600
      pos = (-8*x_scale, 0)
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_2_T
      fillColor [set every repeat] = $color_2
      lineColor [set every repeat] = $color_2
      lineWidth = 0.5
      nVertices = 3600
      pos = (-4*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_3_T
      fillColor [set every repeat] = $color_3
      lineColor [set every repeat] = $color_3
      lineWidth = 0.5
      nVertices = 3600
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_4_T
      fillColor [set every repeat] = $color_4
      lineColor [set every repeat] = $color_4
      lineWidth = 0.5
      nVertices = 3600
      pos = (4*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_5_T
      fillColor [set every repeat] = $color_5
      lineColor [set every repeat] = $color_5
      lineWidth = 0.5
      nVertices = 3600
      pos = (8*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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  Routine block
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    CodeComponent Block_code_2
      Code Type = JS
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      Begin JS Experiment:
        psychoJS.window.mouseVisible = false;
        // 替代 Block_trial 的定义
      Begin JS Routine:
        psychoJS.window.mouseVisible = false;

        let direction = Math.floor(Math.random() * 360);  // 或者读取条件生成的方向
        window.trial_direction = direction;               // ✔️ 保存到 window 对象上
        psychoJS.experiment.addData("direction", direction);

        // 参数设定
        const blockSize = 30;
        const Practice_num = 1;
        const Block_num = Math.ceil(trials.nTotal / blockSize);


        // 当前全局 trial 编号
        let trialNumber = trials.thisN;  // ✅ 是当前 loop 中真实的执行顺序


        // 当前 block ID（从 0 开始），当前 block 内的 trial index
        let Block_id = Math.floor(trialNumber / blockSize);
        let trial_in_block = trialNumber % blockSize;
        window.Block_id = Block_id;
        window.Practice_num = Practice_num;
        window.feedbackID = feedbackID;

        // === 强制记录 Block_id，每轮 trial 都记录 ===
        psychoJS.experiment.addData("Block_id", Block_id);
        console.log(`📋 当前 trialNumber: ${trialNumber}, Block_id: ${Block_id}, trial_in_block: ${trial_in_block}`);

        // === 仅 block 起始 trial 设置提示语，否则跳过 block routine ===
        if (trial_in_block === 0) {
            if (Block_id < Practice_num) {
                Block_text = " Practice will start. Please press 'S' to continue.";
            } else {
                Block_text = `Block (${Block_id - Practice_num + 1} / ${Block_num - Practice_num}) will start. Please press 'S' to continue.`;
            }

            console.log("✅ BlockStart 提示语触发！");
            console.log("📝 Block_text =", Block_text);
        } else {
            Block_text = "false";  // 清空文字
            continueRoutine = false;  // ⛔ 跳过这个 block routine
        }
      End JS Routine:
        psychoJS.experiment.addData('trial_direction', window.trial_direction);
    TextComponent Block_t_2
      color = black
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Block_text
      units = norm
      wrapWidth = 1600
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    KeyboardComponent Block_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Scale_setup
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        psychoJS.window.mouseVisible = false;
        document.body.style.cursor = "none";

        show_keys = 0;
        show_touch = 0;
        if ((expInfo["device type"] === "Touch screen")) {
            show_touch = 1;
        } else {
            show_keys = 1;
        }
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = psychoJS.window.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
  Routine screen_scale_keys
    RoutineSettingsComponent screen_scale_keys
      saveStartStop = False
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    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.window.mouseVisible = false;
        print('key start')
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        #thisExp.addData('X Scale',x_scale)
        #thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.1
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.1
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      saveStartStop = False
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine rectangel_keys
    RoutineSettingsComponent rectangel_keys
      saveStartStop = False
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    TextComponent rectangle_text_keys
      letterHeight = 0.1
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue.
    PolygonComponent polygon_keys
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_keys
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = JS
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      Before JS Experiment:
        console.log("🔍 当前 x_scale =", x_scale);  // ✅ 输出 x_scale 的值
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  Routine encoding
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    PolygonComponent BKG_3
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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    PolygonComponent Fixation_3
      disabled = True
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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    CodeComponent Direction
      Code Type = JS
      disabled = True
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      Before JS Experiment:
        // 新版 RDKEnvelope：使用 RampEnvelope 管理 coherence 插值，并统一混合点池绘制
        class RampEnvelope {
          constructor(coherence = 0.7, rampDur = 30, plateauDur = 1140) {
            this.coherence = coherence;
            this.rampDur = rampDur;
            this.plateauDur = plateauDur;
            this.totalDur = 2 * rampDur + plateauDur;
          }

          getCoherence(tNow) {
            if (tNow < 0) return 0;
            if (tNow < this.rampDur) {
              return this.coherence * (tNow / this.rampDur);
            } else if (tNow < this.rampDur + this.plateauDur) {
              return this.coherence;
            } else if (tNow < this.totalDur) {
              return this.coherence * (1 - (tNow - this.rampDur - this.plateauDur) / this.rampDur);
            } else {
              return 0;
            }
          }

          isFinished(tNow) {
            return tNow >= this.totalDur;
          }
        }

        class RDKEnvelope {
          constructor({
            canvasId = "rdkCanvas",
            coherence = 0.7,
            direction = 0,
            timeDur = 1200,
            dotSize = 2,
            fieldRadius = 200,
            speed = 3.5,
            totalDots = 360,
            noiseMode = "inertial",
            fps = 120
          }) {
            const rampDur = coherence === 0.3 ? 60 : 30;
            const plateauDur = timeDur - 2 * rampDur;
            this.envelope = new RampEnvelope(coherence, rampDur, plateauDur);

            this.direction = direction;
            this.dotSize = dotSize;
            this.fieldRadius = fieldRadius;
            this.speed = speed;
            this.totalDots = totalDots;
            this.noiseMode = noiseMode;
            this.fps = fps;

            this.canvas = document.getElementById(canvasId) || document.createElement("canvas");
            this.canvas.id = canvasId;
            this.canvas.width = window.innerWidth;
            this.canvas.height = window.innerHeight;
            this.canvas.style.position = "absolute";
            this.canvas.style.left = "0";
            this.canvas.style.top = "0";
            this.canvas.style.zIndex = "1000";
            document.body.appendChild(this.canvas);
            this.ctx = this.canvas.getContext("2d");
            this.centerX = this.canvas.width / 2;
            this.centerY = this.canvas.height / 2;

            this.signalDots = this.generateDots(false);
            this.noiseDots = this.generateDots(true);
          }

          generateDots(withTheta = false) {
            const dots = [];
            for (let i = 0; i < this.totalDots; i++) {
              const angle = 2 * Math.PI * Math.random();
              const radius = this.fieldRadius * Math.sqrt(Math.random());
              const dot = {
                x: this.centerX + radius * Math.cos(angle),
                y: this.centerY + radius * Math.sin(angle),
              };
              if (withTheta) dot.theta = 2 * Math.PI * Math.random();
              dots.push(dot);
            }
            return this.shuffleArray(dots);
          }

          shuffleArray(array) {
            for (let i = array.length - 1; i > 0; i--) {
              const j = Math.floor(Math.random() * (i + 1));
              [array[i], array[j]] = [array[j], array[i]];
            }
            return array;
          }

        updateAndDraw(tNow) {
          const coh = this.envelope.getCoherence(tNow);
          const nSig = Math.round(this.totalDots * coh);
          const nNoise = this.totalDots - nSig;
          const fullPool = this.shuffleArray([...this.signalDots, ...this.noiseDots]);
          const signalPool = fullPool.slice(0, nSig);
          const noisePool  = fullPool.slice(nSig, this.totalDots);


        // 先清除所有旧 type，避免颜色污染
            for (let d of this.signalDots) delete d.type;
            for (let d of this.noiseDots)  delete d.type;

        // 只给当前要绘制的 dot 赋予 type
            for (let d of signalPool) d.type = "signal";
            for (let d of noisePool)  d.type = "noise";


          for (let d of signalPool) this.updateSignalDot(d);
          for (let d of noisePool)  this.updateNoiseDot(d);

          // ✅ 插入调试点位是否更新的日志
          if (signalPool.length > 0) {
            const s = signalPool[0];
            console.log(`First signal dot position: x=${s.x.toFixed(1)}, y=${s.y.toFixed(1)}`);
          }

          const drawPool = this.shuffleArray([...signalPool, ...noisePool]);

          this.ctx.clearRect(0, 0, this.canvas.width, this.canvas.height);
          for (let d of drawPool) this.drawDot(d);

          console.log(`t=${tNow.toFixed(1)}ms | coh=${coh.toFixed(2)} | signal=${nSig} | noise=${nNoise}`);

          if (this.envelope.isFinished(tNow)) {
            this.clear();
            return false;
          }
          return true;
        }


          updateSignalDot(d) {
            const dx = this.speed * Math.cos(this.direction * Math.PI / 180);
            const dy = this.speed * Math.sin(this.direction * Math.PI / 180);
            d.x += dx;
            d.y += dy;
            const dist = Math.hypot(d.x - this.centerX, d.y - this.centerY);
            if (dist > this.fieldRadius) {
              Object.assign(d, this.randomDot(false));
            }
          }

          updateNoiseDot(d) {
            if (this.noiseMode === "walk") {
              d.theta = 2 * Math.PI * Math.random();
            }
            if (this.noiseMode === "replace") {
              Object.assign(d, this.randomDot(true));
            } else {
              d.x += this.speed * Math.cos(d.theta);
              d.y += this.speed * Math.sin(d.theta);
            }
            const dist = Math.hypot(d.x - this.centerX, d.y - this.centerY);
            if (dist > this.fieldRadius) {
              Object.assign(d, this.randomDot(true));
            }
          }

        randomDot(withTheta = false) {
          const angle = 2 * Math.PI * Math.random();
          const radius = this.fieldRadius * Math.sqrt(Math.random());
          const dot = {
            x: this.centerX + radius * Math.cos(angle),
            y: this.centerY + radius * Math.sin(angle),
          };
          if (withTheta) {
            dot.theta = 2 * Math.PI * Math.random();
          } else {
            // very important for inertial mode
            dot.theta = this.direction * Math.PI / 180;
          }
          return dot;
        }

          drawDot(d) {
            this.ctx.beginPath();
            this.ctx.arc(d.x, d.y, this.dotSize, 0, 2 * Math.PI);
            this.ctx.fillStyle =
          d.type === "signal" ? "lime" :
          d.type === "noise"  ? "red" :
          "gray";  // fallback 防止残留 signal 点未被覆盖

            this.ctx.fill();

          }

          clear() {
            if (this.canvas && this.canvas.parentNode) {
              this.ctx.clearRect(0, 0, this.canvas.width, this.canvas.height);
              this.canvas.remove();
            }
          }
        }
      Begin JS Routine:
        // 获取参数（来自 trial handler 或 conditions）
        window.coherence = parseFloat(Coherence1);
        window.timeDur = parseFloat(TimeDur) * 1000;  // 单位：ms
        window.rampDur = (window.coherence === 0.3) ? 60 : 30;
        window.direction = window.trial_direction;

        // 像素换算（cm → px）
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let speed = (3.5 * cm_to_px_x) / 120;  // px per frame @120fps

        // 初始化 RDKEnvelope
        window.rdkStart = performance.now();
        window.rdk = new RDKEnvelope({
          canvasId: "rdkCanvas",
          coherence: window.coherence,
          direction: window.direction,
          timeDur: window.timeDur,
          dotSize: 0.03 * cm_to_px_x,
          fieldRadius: 3.5 * cm_to_px_x,
          speed: speed,
          noiseMode: "inertial"
        });
      Each JS Frame:
        let tNow = performance.now() - window.rdkStart;
        let keepGoing = window.rdk.updateAndDraw(tNow);
        if (!keepGoing) {
          continueRoutine = false;
        }
      End JS Routine:
        // 清除 Canvas
        if (window.rdkCanvas) {
          const ctx = window.rdkCanvas.getContext("2d");
          ctx.clearRect(0, 0, window.rdkCanvas.width, window.rdkCanvas.height);
        }
    CodeComponent D2
      Code Type = JS
      disabled = True
      Before JS Experiment:
        class FlexibleRampEnvelope {
          constructor({
            startCoherence = 0.0,
            targetCoherence = 0.7,
            preRandomDur = 0,           // ⬅️ 新增：前置纯随机时长
            rampUpDur = 200,
            plateauDur = 800,
            rampDownDur = 200,
            postRandomDur = 0           // ⬅️ 新增：后置纯随机时长
          }) {
            this.startCoherence = startCoherence;
            this.targetCoherence = targetCoherence;
            this.preRandomDur = preRandomDur;
            this.rampUpDur = rampUpDur;
            this.plateauDur = plateauDur;
            this.rampDownDur = rampDownDur;
            this.postRandomDur = postRandomDur;

            this.totalDur = preRandomDur + rampUpDur + plateauDur + rampDownDur + postRandomDur;
          }

          getCoherence(tNow) {
            const c0 = this.startCoherence;
            const c1 = this.targetCoherence;

            if (tNow < 0) return c0;

            const t1 = this.preRandomDur;
            const t2 = t1 + this.rampUpDur;
            const t3 = t2 + this.plateauDur;
            const t4 = t3 + this.rampDownDur;
            const t5 = t4 + this.postRandomDur;

            if (tNow < t1) return c0;  // pre-random
            if (tNow < t2) return c0 + (c1 - c0) * ((tNow - t1) / this.rampUpDur);  // ramp-up
            if (tNow < t3) return c1;  // plateau
            if (tNow < t4) return c1 + (c0 - c1) * ((tNow - t3) / this.rampDownDur);  // ramp-down
            if (tNow < t5) return c0;  // post-random
            return c0;
          }

          isFinished(tNow) {
            return tNow >= this.totalDur;
          }
        }
      Begin JS Routine:
        /***** 初始化 Canvas 并设置参数 *****/
        // 创建并挂载 RDK 画布
        window.canvas = document.createElement("canvas");
        window.canvas.id = "rdkCanvas";
        window.canvas.width = window.innerWidth;
        window.canvas.height = window.innerHeight;
        window.canvas.style.position = "absolute";
        window.canvas.style.left = "0";
        window.canvas.style.top = "0";
        window.canvas.style.zIndex = "1000";
        document.body.appendChild(window.canvas);

        // 获取绘图上下文
        window.ctx = window.canvas.getContext("2d");

        /***** 计算单位换算参数 *****/
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let cm_to_px_y = psychoJS.window.size[1] * y_scale;

        /***** 读取 trial 参数 *****/
        const targetCoherence = parseFloat(Coherence1);    // e.g. 0.3 or 0.7
        const timeDur = parseFloat(TimeDur) * 1000;        // 中点到中点的有效感知时间（ms）
        window.direction = window.trial_direction * Math.PI / 180; // 转为弧度

        /***** 设置各阶段持续时间 *****/
        const rampDur = (targetCoherence === 0.3) ? 60 : 30;  // rampUp & rampDown 都是这个
        const preRandomDur = 200;
        const postRandomDur = 200;
        const plateau = timeDur - rampDur;  // 根据设计，中点到中点不含 pre/post

        // 错误检查
        if (plateau < 0) {
          console.warn("⚠️ Plateau duration < 0! TimeDur 设置过短。");
        }

        /***** 初始化 Coherence 包络对象 *****/
        class FlexibleRampEnvelope {
          constructor({ startCoherence = 0.0, targetCoherence = 0.7, preRandomDur = 200, rampUpDur = 60, plateauDur = 1000, rampDownDur = 60, postRandomDur = 200 }) {
            this.startCoherence = startCoherence;
            this.targetCoherence = targetCoherence;
            this.preRandomDur = preRandomDur;
            this.rampUpDur = rampUpDur;
            this.plateauDur = plateauDur;
            this.rampDownDur = rampDownDur;
            this.postRandomDur = postRandomDur;
            this.totalDur = preRandomDur + rampUpDur + plateauDur + rampDownDur + postRandomDur;
          }

          getCoherence(tNow) {
            const c0 = this.startCoherence;
            const c1 = this.targetCoherence;
            if (tNow < 0) return c0;
            if (tNow < this.preRandomDur) return 0.0;
            const t = tNow - this.preRandomDur;

            if (t <= this.rampUpDur)
              return c0 + (c1 - c0) * (t / this.rampUpDur);
            if (t <= this.rampUpDur + this.plateauDur)
              return c1;
            if (t <= this.rampUpDur + this.plateauDur + this.rampDownDur)
              return c1 + (c0 - c1) * ((t - this.rampUpDur - this.plateauDur) / this.rampDownDur);
            if (t <= this.rampUpDur + this.plateauDur + this.rampDownDur + this.postRandomDur)
              return 0.0;

            return c0;
          }

          isFinished(tNow) {
            return tNow >= this.totalDur;
          }
        }

        window.rdkEnvelope = new FlexibleRampEnvelope({
          startCoherence: 0.0,
          targetCoherence: targetCoherence,
          preRandomDur: preRandomDur,
          rampUpDur: rampDur,
          plateauDur: plateau,
          rampDownDur: rampDur,
          postRandomDur: postRandomDur
        });

        /***** 初始化 dot 列表 *****/
        const totalDots = 360;
        window.centerX = window.canvas.width / 2;
        window.centerY = window.canvas.height / 2;
        window.radius = 3.5 * cm_to_px_x;
        window.dotSize = 0.03 * cm_to_px_x;
        window.speed = 3.5 * cm_to_px_x / 120;

        // 初始化 dot 位置
        window.rdkDots = Array.from({ length: totalDots }, () => {
          const angle = 2 * Math.PI * Math.random();
          const r = window.radius * Math.sqrt(Math.random());
          return {
            x: window.centerX + r * Math.cos(angle),
            y: window.centerY + r * Math.sin(angle),
            theta: 2 * Math.PI * Math.random(),  // 仅供 noise 用
            active: false,
            isSignalCandidate: false
          };
        });

        // 打乱并标记 signal 候选点
        function shuffleArray(arr) {
          for (let i = arr.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1));
            [arr[i], arr[j]] = [arr[j], arr[i]];
          }
        }
        shuffleArray(window.rdkDots);

        const nMaxSignal = Math.round(targetCoherence * totalDots);
        window.rdkDots.forEach((d, i) => {
          d.isSignalCandidate = (i < nMaxSignal);
          d.active = false;
        });
        console.log
        /***** 启动时钟 *****/
        window.rdkStartTime = performance.now();
      Each JS Frame:
        const now = performance.now();
        const elapsed = now - window.rdkStartTime;
        const ctx = window.ctx;
        const canvas = window.canvas;
        const timeDur = parseFloat(TimeDur) * 1000;
        ctx.clearRect(0, 0, canvas.width, canvas.height);
        const totalDots = 360
        const coh = window.rdkEnvelope.getCoherence(elapsed);
        const nSignal = Math.round(coh * totalDots);

        // 激活前 nSignal 个 signal 候选点
        let signalCount = 0;
        for (let d of window.rdkDots) {
          if (d.isSignalCandidate && signalCount < nSignal) {
            d.active = true;
            signalCount++;
          } else {
            d.active = false;
          }
        }

        // 更新位置 & 绘制点
        for (let d of window.rdkDots) {
          const theta = d.active ? direction : d.theta;

          d.x += window.speed * Math.cos(theta);
          d.y += window.speed * Math.sin(theta);

          const dist = Math.hypot(d.x - window.centerX, d.y - window.centerY);
          if (dist > window.radius) {
            const angle = 2 * Math.PI * Math.random();
            const r = window.radius * Math.sqrt(Math.random());
            d.x = window.centerX + r * Math.cos(angle);
            d.y = window.centerY + r * Math.sin(angle);
            d.theta = 2 * Math.PI * Math.random();
          }

          ctx.beginPath();
          ctx.arc(d.x, d.y, window.dotSize, 0, 2 * Math.PI);
          ctx.fillStyle = "white"; // 统一使用白色显示
          ctx.fill();
        }

        // ✅ 打印调试
        console.log(`t=${elapsed.toFixed(1)}ms | coherence=${coh.toFixed(2)} | signal=${nSignal} | TimeD=${timeDur}`);


        // ✅ 检查结束
        if (window.rdkEnvelope.isFinished(elapsed)) {
          continueRoutine = false;
        }
      End JS Routine:
        ctx.clearRect(0, 0, canvas.width, canvas.height);
        document.body.removeChild(canvas);
        const plotDiv = document.getElementById("plotDiv");
        if (plotDiv) {
          plotDiv.remove();
        }
        window.debugData = null;
    CodeComponent Onedot
      Code Type = JS
      disabled = True
      Before JS Experiment:
        class FlexibleRampEnvelope {
          constructor({ startCoherence, targetCoherence, preRandomDur, rampUpDur, plateauDur, rampDownDur, postRandomDur }) {
            this.startCoherence = startCoherence;
            this.targetCoherence = targetCoherence;
            this.preRandomDur = preRandomDur;
            this.rampUpDur = rampUpDur;
            this.plateauDur = plateauDur;
            this.rampDownDur = rampDownDur;
            this.postRandomDur = postRandomDur;
            this.totalDur = preRandomDur + rampUpDur + plateauDur  + postRandomDur;
          }

          getCoherence(tNow) {
            const c0 = this.startCoherence;
            const c1 = this.targetCoherence;
            const t1 = this.preRandomDur;
            const t2 = t1 + this.rampUpDur;
            const t3 = t2 + this.plateauDur;
            const t4 = t3 + this.rampDownDur;
            const t5 = t4 + this.postRandomDur;

            if (tNow < 0) return c0;
            if (tNow < t1) return c0;
            if (tNow < t2) return c0 + (c1 - c0) * ((tNow - t1) / this.rampUpDur);
            if (tNow < t3) return c1;
            if (tNow < t4) return c1 + (c0 - c1) * ((tNow - t3) / this.rampDownDur);
            if (tNow < t5) return c0;
            return c0;
          }

          isFinished(tNow) {
            return tNow >= this.totalDur;
          }
        }
      Begin JS Routine:
        // ========== 参数定义 ==========
        // 获取参数（来自 trial handler 或 conditions）
        window.coherence = parseFloat(Coherence1);
        window.timeDur = parseFloat(TimeDur) * 1000;  // 单位：ms
        window.rampDur = (window.coherence === 0.3) ? 60 : 30;
        window.direction = window.trial_direction;
        cm_to_px_x = psychoJS.window.size[0] * x_scale;
        cm_to_px_y = psychoJS.window.size[1] * y_scale;
        speed = 0.035 * cm_to_px_x;  // 每秒像素速度（你定的）
        fieldRadius = 3.5 * cm_to_px_x;
        dotRadius = 0.03* cm_to_px_x;  // 建议测试时可调大为 5~6 观察清晰度
        centerX = window.innerWidth / 2;
        centerY = window.innerHeight / 2;

        // coherent 方向设置为 trial 参数
        direction = window.trial_direction * Math.PI / 180;

        // ========== 初始化 dots ==========
        dots = Array.from({ length: 1 }, () => {
          const angle = 2 * Math.PI * Math.random();
          const r = fieldRadius * Math.sqrt(Math.random());
          return {
            x: centerX + r * Math.cos(angle),
            y: centerY + r * Math.sin(angle),
            theta: Math.random() * 2 * Math.PI
          };
        });


        // ========== coherence 包络函数 ==========
        envelope = new FlexibleRampEnvelope({
          startCoherence: 0.0,
          targetCoherence: window.coherence ,
          preRandomDur: 1000,
          rampUpDur: window.rampDur ,
          plateauDur: window.timeDur,
          rampDownDur: window.rampDur ,
          postRandomDur: 1000
        });
        // 只创建一次 canvas
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "999";
          document.body.appendChild(canvas);
          window.rdkCanvas = canvas;
          window.ctx = canvas.getContext("2d");
        }

        // 获取 context
        canvas = window.rdkCanvas;
        ctx = window.ctx;


        // ========== 启动时间 ==========
        startTime = performance.now();
        lastFrameTime = startTime;
      Each JS Frame:
        const now = performance.now();
        const elapsed = now - startTime;
        const deltaTime = (now - lastFrameTime) / 1000;
        lastFrameTime = now;

        // 获取当前 coherence
        const coh = envelope.getCoherence(elapsed);
        // 清空背景
        ctx.fillStyle = "#888";
        ctx.fillRect(0, 0, canvas.width, canvas.height);


        // 每帧中：
        for (let dot of dots) {
          const useCoherent = Math.random() < coh;
          const angle = useCoherent ? direction : dot.theta;

          // 更新位置
          dot.x += speed * Math.cos(angle);
          dot.y += speed * Math.sin(angle);


          // Dot lifetime：避免聚集
          dot.age = (dot.age || 0) + 1;
          if (dot.age > 120) {
            const a = Math.random() * 2 * Math.PI;
            const r = fieldRadius * Math.sqrt(Math.random());
            dot.x = centerX + r * Math.cos(a);
            dot.y = centerY + r * Math.sin(a);
            dot.theta = Math.random() * 2 * Math.PI;
            dot.age = 0;
          }

          // wrap-around 保留
          const dx = dot.x - centerX;
          const dy = dot.y - centerY;
          const dist = Math.sqrt(dx * dx + dy * dy);
          if (dist > fieldRadius) {
            const a = 2 * Math.PI * Math.random();
            const r = fieldRadius * Math.sqrt(Math.random());
            dot.x = centerX + r * Math.cos(a);
            dot.y = centerY + r * Math.sin(a);
          }

          // 绘制
          ctx.beginPath();
          ctx.arc(dot.x, dot.y, dotRadius, 0, 2 * Math.PI);
          ctx.fillStyle = "white";
          ctx.fill();
        }


        // 日志
        console.log(`t=${elapsed.toFixed(0)}ms | coh=${coh.toFixed(2)}`);

        // 包络结束
        if (envelope.isFinished(elapsed)) {
          continueRoutine = false;
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
    CodeComponent RDKcontroller
      Code Type = JS
      disabled = True
      Before JS Experiment:
        class FlexibleRampEnvelope {
          constructor({ startCoherence = 0.0, targetCoherence = 0.6, preRandomDur = 500, rampUpDur = 200, plateauDur = 1000, rampDownDur = 200, postRandomDur = 300 }) {
            this.startCoherence = startCoherence;
            this.targetCoherence = targetCoherence;
            this.preRandomDur = preRandomDur;
            this.rampUpDur = rampUpDur;
            this.plateauDur = plateauDur;
            this.rampDownDur = rampDownDur;
            this.postRandomDur = postRandomDur;
            this.totalDur = preRandomDur + rampUpDur + plateauDur + rampDownDur + postRandomDur;
          }

          getCoherence(tNow) {
            const c0 = this.startCoherence;
            const c1 = this.targetCoherence;
            const t1 = this.preRandomDur;
            const t2 = t1 + this.rampUpDur;
            const t3 = t2 + this.plateauDur;
            const t4 = t3 + this.rampDownDur;
            const t5 = t4 + this.postRandomDur;

            if (tNow < t1) return c0;
            if (tNow < t2) return c0 + (c1 - c0) * ((tNow - t1) / this.rampUpDur);
            if (tNow < t3) return c1;
            if (tNow < t4) return c1 + (c0 - c1) * ((tNow - t3) / this.rampDownDur);
            if (tNow < t5) return c0;
            return c0;
          }

          isFinished(tNow) {
            return tNow >= this.totalDur;
          }
        }

        class CustomRDK {
          constructor({ canvas, nDots, envelope, speed, dotSize, fieldRadius, direction, motionType, noiseMode }) {
            this.canvas = canvas;
            this.ctx = canvas.getContext("2d");
            this.nDots = nDots;
            this.envelope = envelope;
            this.speed = speed; // px/s
            this.dotSize = dotSize;
            this.fieldRadius = fieldRadius;
            this.centerX = canvas.width / 2;
            this.centerY = canvas.height / 2;
            this.motionType = motionType;
            this.noiseMode = noiseMode;
            this.direction = direction * Math.PI / 180; // degree → rad
            this.dots = this.initDots();
            this.startTime = performance.now();
            this.lastCoherence = 0;
          }

          initDots() {
            return Array.from({ length: this.nDots }, () => {
              const angle = 2 * Math.PI * Math.random();
              const r = this.fieldRadius * Math.sqrt(Math.random());
              return {
                x: this.centerX + r * Math.cos(angle),
                y: this.centerY + r * Math.sin(angle),
                theta: 2 * Math.PI * Math.random()
              };
            });
          }

          update(deltaTime) {
            const now = performance.now();
            const elapsed = now - this.startTime;
            const ctx = this.ctx;
            const coh = this.envelope.getCoherence(elapsed);
            this.lastCoherence = coh;

            ctx.clearRect(0, 0, this.canvas.width, this.canvas.height);

            for (let dot of this.dots) {
              const isSignal = Math.random() < coh;

              let angle;
              if (this.motionType === "radialIn") {
                angle = Math.atan2(this.centerY - dot.y, this.centerX - dot.x);
              } else if (this.motionType === "radialOut") {
                angle = Math.atan2(dot.y - this.centerY, dot.x - this.centerX);
              } else {
                angle = this.direction;
              }

              const moveAngle = isSignal ? angle : dot.theta;

              // 移动
              dot.x += this.speed * deltaTime * Math.cos(moveAngle);
              dot.y += this.speed * deltaTime * Math.sin(moveAngle);

              // noise: 随机方向更新
              if (!isSignal && this.noiseMode === "walk") {
                dot.theta = 2 * Math.PI * Math.random();
              }

              // wrap around
              const dx = dot.x - this.centerX;
              const dy = dot.y - this.centerY;
              const dist = Math.sqrt(dx * dx + dy * dy);
              if (dist > this.fieldRadius || isNaN(dot.x)) {
                const angle = 2 * Math.PI * Math.random();
                const r = this.fieldRadius * Math.sqrt(Math.random());
                dot.x = this.centerX + r * Math.cos(angle);
                dot.y = this.centerY + r * Math.sin(angle);
                dot.theta = 2 * Math.PI * Math.random();
              }

              // draw
              ctx.beginPath();
              ctx.arc(dot.x, dot.y, this.dotSize, 0, 2 * Math.PI);
              ctx.fillStyle = "white";
              ctx.fill();
            }
          }
        }
      Begin JS Routine:
        cm_to_px_x = psychoJS.window.size[0] * x_scale;
        dotRadius = 0.03 * cm_to_px_x;
        fieldRadius = 3.5 * cm_to_px_x;
        speed = 3.5 * cm_to_px_x;  // px/s

        // 创建 canvas
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.id = "rdkCanvas";
          canvas.width = window.innerWidth;
          canvas.height = window.innerHeight;
          canvas.style.position = "absolute";
          canvas.style.left = "0";
          canvas.style.top = "0";
          canvas.style.zIndex = "1000";
          document.body.appendChild(canvas);
          window.rdkCanvas = canvas;
          window.ctx = canvas.getContext("2d");
        }
        canvas = window.rdkCanvas;
        ctx = window.ctx;

        // 启动时间
        startTime = performance.now();
        lastFrameTime = startTime;

        // 创建 envelope
        envelope = new FlexibleRampEnvelope({
          startCoherence: 0.0,
          targetCoherence: 0.3,
          preRandomDur: 200,
          rampUpDur: 60,
          plateauDur: 1000,
          rampDownDur: 60,
          postRandomDur: 200
        });

        // 创建 RDK 对象
        rdk = new CustomRDK({
          canvas: canvas,
          nDots: 360,
          envelope: envelope,
          speed: speed,
          dotSize: dotRadius,
          fieldRadius: fieldRadius,
          direction: 45,
          motionType: "oneDirection",  // 可换成 radialIn / radialOut
          noiseMode: "walk"
        });
      Each JS Frame:
        const now = performance.now();
        const elapsed = now - startTime;
        const deltaTime = (now - lastFrameTime) / 1000;
        lastFrameTime = now;

        rdk.update(deltaTime);

        // 自动退出（envelope 结束）
        if (envelope.isFinished(elapsed)) {
          continueRoutine = false;
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
    CodeComponent code_4
      Code Type = JS
      disabled = True
      Before JS Experiment:
        // === 包络类定义 ===
        class FlexibleRampEnvelope {
          constructor({ startCoherence = 0.0, targetCoherence = 0.7, preRandomDur = 500, rampUpDur = 300, plateauDur = 1000, rampDownDur = 300, postRandomDur = 500 }) {
            this.startCoherence = startCoherence;
            this.targetCoherence = targetCoherence;
            this.preRandomDur = preRandomDur;
            this.rampUpDur = rampUpDur;
            this.plateauDur = plateauDur;
            this.rampDownDur = rampDownDur;
            this.postRandomDur = postRandomDur;
            this.totalDur = preRandomDur + rampUpDur + plateauDur + rampDownDur + postRandomDur;
          }

          getCoherence(tNow) {
            const c0 = this.startCoherence;
            const c1 = this.targetCoherence;
            const t1 = this.preRandomDur;
            const t2 = t1 + this.rampUpDur;
            const t3 = t2 + this.plateauDur;
            const t4 = t3 + this.rampDownDur;
            const t5 = t4 + this.postRandomDur;

            if (tNow < 0) return c0;
            if (tNow < t1) return c0;
            if (tNow < t2) return c0 + (c1 - c0) * ((tNow - t1) / this.rampUpDur);
            if (tNow < t3) return c1;
            if (tNow < t4) return c1 + (c0 - c1) * ((tNow - t3) / this.rampDownDur);
            if (tNow < t5) return c0;
            return c0;
          }

          isFinished(tNow) {
            return tNow >= this.totalDur;
          }
        }
      Begin JS Routine:
        // === 参数 ===
        const fps = 60;
        const x_scale = 0.05;
        const y_scale = 0.05;
        cm_to_px_x = psychoJS.window.size[0] * x_scale;
        cm_to_px_y = psychoJS.window.size[1] * y_scale;
        speed = 3.5 * cm_to_px_x; // px/sec
        dotRadius = 0.04 * cm_to_px_x;
        fieldRadius = 3.5 * cm_to_px_x;
        centerX = window.innerWidth / 2;
        centerY = window.innerHeight / 2;
        direction = trial_direction * Math.PI / 180;

        // === 创建 Canvas（仅一次） ===
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.id = "rdkCanvas";
          canvas.width = window.innerWidth;
          canvas.height = window.innerHeight;
          canvas.style.position = "absolute";
          canvas.style.zIndex = "1000";
          canvas.style.top = "0";
          canvas.style.left = "0";
          document.body.appendChild(canvas);
          window.rdkCanvas = canvas;
          window.ctx = canvas.getContext("2d");
        }
        canvas = window.rdkCanvas;
        ctx = window.ctx;

        // === 创建点阵 ===
        const numDots = 360;
        dots = [];
        for (let i = 0; i < numDots; i++) {
          const r = Math.sqrt(Math.random()) * fieldRadius;
          const theta = Math.random() * 2 * Math.PI;
          dots.push({
            x: centerX + r * Math.cos(theta),
            y: centerY + r * Math.sin(theta),
            theta: Math.random() * 2 * Math.PI
          });
        }

        // === 包络曲线 ===
        envelope = new FlexibleRampEnvelope({
          startCoherence: 0.0,
          targetCoherence: 1.0,
          preRandomDur: 1000,
          rampUpDur: 300,
          plateauDur: 1000,
          rampDownDur: 300,
          postRandomDur: 500
        });

        // === 启动时钟 ===
        startTime = performance.now();
      Each JS Frame:
        const now = performance.now();
        const tNow = now - startTime;
        const coherence = envelope.getCoherence(tNow);

        ctx.clearRect(0, 0, canvas.width, canvas.height);

        // 绘制灰色背景圆
        ctx.fillStyle = "#888";
        ctx.beginPath();
        ctx.arc(centerX, centerY, fieldRadius, 0, 2 * Math.PI);
        ctx.fill();

        // 绘制点阵
        for (let i = 0; i < dots.length; i++) {
          const isSignal = i < Math.floor(coherence * dots.length);
          const d = dots[i];
          const moveDir = isSignal ? direction : d.theta;

          // 移动
          d.x += (speed / fps) * Math.cos(moveDir);
          d.y += (speed / fps) * Math.sin(moveDir);

          // 检查是否超出圆
          const dx = d.x - centerX;
          const dy = d.y - centerY;
          if (dx * dx + dy * dy > fieldRadius * fieldRadius) {
            const r = Math.sqrt(Math.random()) * fieldRadius;
            const theta = Math.random() * 2 * Math.PI;
            d.x = centerX + r * Math.cos(theta);
            d.y = centerY + r * Math.sin(theta);
            d.theta = Math.random() * 2 * Math.PI;
          }

          // 绘制点
          ctx.beginPath();
          ctx.arc(d.x, d.y, dotRadius, 0, 2 * Math.PI);
          ctx.fillStyle = isSignal ? "white" : "black";
          ctx.fill();
        }

        // 提前结束条件（可选）
        if (envelope.isFinished(tNow)) {
          continueRoutine = false;
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
    CodeComponent var_3phase_one
      Code Type = JS
      disabled = True
      Before JS Experiment:
        class OneDot {
          constructor(x, y, radius, speed, direction) {
            this.x = x;
            this.y = y;
            this.radius = radius;
            this.speed = speed;
            this.theta = Math.random() * 2 * Math.PI;  // 初始随机方向
            this.fixedDir = direction;  // coherent phase 使用
          }

          update(phase, dt) {
            if (phase === "inertial") {
              this.move(this.fixedDir, dt);
            } else {
              this.theta += (Math.random() - 0.5) * 0.3;  // 随机扰动
              this.move(this.theta, dt);
            }
          }

        move(theta, dt) {
          this.x += this.speed * dt * Math.cos(theta);
          this.y += this.speed * dt * Math.sin(theta);

          // === 保持在圆内 ===
          const dx = this.x - fieldCenterX;
          const dy = this.y - fieldCenterY;
          const distSq = dx * dx + dy * dy;
          if (distSq > fieldRadius * fieldRadius) {
            // wrap 到圆内随机点
            const r = Math.sqrt(Math.random()) * fieldRadius;
            const a = Math.random() * 2 * Math.PI;
            this.x = fieldCenterX + r * Math.cos(a);
            this.y = fieldCenterY + r * Math.sin(a);
            this.theta = Math.random() * 2 * Math.PI;
          }
        }


          draw(ctx) {
            ctx.beginPath();
            ctx.arc(this.x, this.y, this.radius, 0, 2 * Math.PI);
            ctx.fillStyle = "white";
            ctx.fill();
          }
        }

        class DotEnvelope {
          constructor(pre = 1000, coh = 1500, post = 1000) {
            this.pre = pre;
            this.coh = coh;
            this.post = post;
            this.total = pre + coh + post;
          }

          getPhase(t) {
            if (t < this.pre) return "walk";
            if (t < this.pre + this.coh) return "inertial";
            if (t < this.total) return "walk";
            return "done";
          }
        }
      Begin JS Routine:
        // === 圆形运动区域参数 ===
        cm_to_px_x = psychoJS.window.size[0] * 0.05;
        fieldRadius = 3.5 * cm_to_px_x;
        fieldCenterX = window.innerWidth / 2;
        fieldCenterY = window.innerHeight / 2;
        dotRadius = 0.03 * cm_to_px_x;
        dotSpeed = 1.75 * cm_to_px_x ;
        // === 创建 dot 在圆内随机位置 ===
        const direction = trial_direction * Math.PI / 180;
        const r = Math.sqrt(Math.random()) * fieldRadius;
        const angle = Math.random() * 2 * Math.PI;
        const x = fieldCenterX + r * Math.cos(angle);
        const y = fieldCenterY + r * Math.sin(angle);

        dot = new OneDot(x, y, dotRadius, dotSpeed, direction);



        // === 创建 dot 对象 ===
        dot = new OneDot(window.innerWidth / 2, window.innerHeight / 2, dotRadius, dotSpeed, direction);

        // === 包络结构：walk → inertial → walk ===
        envelope = new DotEnvelope(200, 1500, 200);  // ms

        // === 创建 canvas（只建一次）===
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.width = window.innerWidth;
          canvas.height = window.innerHeight;
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "1000";
          document.body.appendChild(canvas);
          window.rdkCanvas = canvas;
          window.ctx = canvas.getContext("2d");
        }
        canvas = window.rdkCanvas;
        ctx = window.ctx;

        // === 启动计时 ===
        startTime = performance.now();
      Each JS Frame:
        const now = performance.now();
        const elapsed = now - startTime;
        const dt = 1 / 60;

        const phase = envelope.getPhase(elapsed);

        // 更新 dot
        dot.update(phase, dt);

        ctx.clearRect(0, 0, canvas.width, canvas.height);

        // 画灰色背景圆
        ctx.fillStyle = "#888";
        ctx.beginPath();
        ctx.arc(fieldCenterX, fieldCenterY, fieldRadius, 0, 2 * Math.PI);
        ctx.fill();

        // 绘制 dot
        dot.draw(ctx);


        // 自动结束
        if (phase === "done") {
          continueRoutine = false;
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
    CodeComponent var_3phase_360
      Code Type = JS
      disabled = True
      Before JS Experiment:
        class Dot {
          constructor(x, y, radius, speed, direction, phaseStartTime = 0, rampUp = 300, plateau = 1000, rampDown = 300) {
            this.x = x;
            this.y = y;
            this.radius = radius;
            this.speed = speed;
            this.theta = Math.random() * 2 * Math.PI;
            this.fixedDir = direction;

            this.phaseStartTime = phaseStartTime;
            this.rampUp = rampUp;
            this.plateau = plateau;
            this.rampDown = rampDown;
            this.total = rampUp + plateau + rampDown;
          }

          getCoherence(tNow) {
            const t = tNow - this.phaseStartTime;
            if (t < 0) return 0.0;
            if (t < this.rampUp) return t / this.rampUp;
            if (t < this.rampUp + this.plateau) return 1.0;
            if (t < this.total) return 1.0 - (t - this.rampUp - this.plateau) / this.rampDown;
            return 0.0;
          }

          update(tNow, dt) {
            const c = this.getCoherence(tNow);
            let moveDir;

            if (Math.random() < c) {
              moveDir = this.fixedDir;
            } else {
              this.theta += (Math.random() - 0.5) * 0.3;
              moveDir = this.theta;
            }

            this.move(moveDir, dt);
          }

          move(theta, dt) {
            this.x += this.speed * dt * Math.cos(theta);
            this.y += this.speed * dt * Math.sin(theta);

            const dx = this.x - fieldCenterX;
            const dy = this.y - fieldCenterY;
            const dist2 = dx * dx + dy * dy;
            if (dist2 > fieldRadius * fieldRadius) {
              const a = Math.random() * 2 * Math.PI;
              const r = Math.sqrt(Math.random()) * fieldRadius;
              this.x = fieldCenterX + r * Math.cos(a);
              this.y = fieldCenterY + r * Math.sin(a);
              this.theta = Math.random() * 2 * Math.PI;
            }
          }

          draw(ctx) {
            ctx.beginPath();
            ctx.arc(this.x, this.y, this.radius, 0, 2 * Math.PI);
            ctx.fillStyle = "white";
            ctx.fill();
          }

          isFinished(tNow) {
            return (tNow - this.phaseStartTime) > this.total;
          }
        }
      Begin JS Routine:
        // === 参数 ===
        cm_to_px_x = psychoJS.window.size[0] * 0.05;
        fieldRadius = 3.5 * cm_to_px_x;
        fieldCenterX = window.innerWidth / 2;
        fieldCenterY = window.innerHeight / 2;
        dotRadius = 0.03 * cm_to_px_x;
        dotSpeed = 1.75 * cm_to_px_x;
        direction = trial_direction * Math.PI / 180;
        numDots = 360;

        // === 创建 dots ===
        dots = [];
        for (let i = 0; i < numDots; i++) {
          const r = Math.sqrt(Math.random()) * fieldRadius;
          const a = Math.random() * 2 * Math.PI;
          const x = fieldCenterX + r * Math.cos(a);
          const y = fieldCenterY + r * Math.sin(a);

          const jitter = 200;  // 各 dot phaseStartTime 可微调
          const start = performance.now() + jitter;

          const dot = new Dot(x, y, dotRadius, dotSpeed, direction, start, 30, 1000, 30);
          dots.push(dot);
        }

        // === 创建 canvas ===
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.width = window.innerWidth;
          canvas.height = window.innerHeight;
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "1000";
          document.body.appendChild(canvas);
          window.rdkCanvas = canvas;
          window.ctx = canvas.getContext("2d");
        }
        canvas = window.rdkCanvas;
        ctx = window.ctx;

        // === 记录时间 ===
        startTime = performance.now();
      Each JS Frame:
        const now = performance.now();
        const dt = 1 / 60;

        ctx.clearRect(0, 0, canvas.width, canvas.height);
        ctx.fillStyle = "#888";
        ctx.beginPath();
        ctx.arc(fieldCenterX, fieldCenterY, fieldRadius, 0, 2 * Math.PI);
        ctx.fill();

        let allDone = true;

        for (let i = 0; i < dots.length; i++) {
          dots[i].update(now, dt);
          dots[i].draw(ctx);

          if (!dots[i].isFinished(now)) {
            allDone = false;
          }
        }

        if (allDone) {
          continueRoutine = false;
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
    CodeComponent Noiseonedot
      Code Type = JS
      disabled = True
      Before JS Experiment:
        class Dot {
          constructor(x, y, radius, speed, direction) {
            this.x = x;
            this.y = y;
            this.radius = radius;
            this.speed = speed;
            this.theta = Math.random() * 2 * Math.PI;
            this.fixedDir = direction;
          }

          updateDirection(dt, mode) {
            if (mode === "coherent") {
              this.move(this.fixedDir, dt);
            } else {
              this.theta += (Math.random() - 0.5) * 0.3;
              this.move(this.theta, dt);
            }
          }

          move(theta, dt) {
            this.x += this.speed * dt * Math.cos(theta);
            this.y += this.speed * dt * Math.sin(theta);

            const dx = this.x - fieldCenterX;
            const dy = this.y - fieldCenterY;
            const dist2 = dx * dx + dy * dy;
            if (dist2 > fieldRadius * fieldRadius) {
              const angle = Math.atan2(dy, dx) + Math.PI;
              const r = fieldRadius * Math.sqrt(Math.random());
              this.x = fieldCenterX + r * Math.cos(angle);
              this.y = fieldCenterY + r * Math.sin(angle);
              this.theta = Math.random() * 2 * Math.PI;
            }
          }

          draw(ctx) {
            ctx.beginPath();
            ctx.arc(this.x, this.y, this.radius, 0, 2 * Math.PI);
            ctx.fillStyle = "white";
            ctx.fill();
          }
        }

        class PhaseEnvelope {
          constructor(pre = 200, coh = 800, post = 200) {
            this.t1 = pre;
            this.t2 = pre + coh;
            this.t3 = pre + coh + post;
          }

          getPhase(t) {
            if (t < this.t1) return "random";
            if (t < this.t2) return "coherent";
            if (t < this.t3) return "random";
            return "done";
          }

          isFinished(t) {
            return t >= this.t3;
          }
        }
      Begin JS Routine:
        // --- 视觉参数计算 ---
        const cm_to_px_x = psychoJS.window.size[0] * x_scale;
        fieldRadius = 3.5 * cm_to_px_x;
        fieldCenterX = window.innerWidth / 2;
        fieldCenterY = window.innerHeight / 2;
        dotRadius = 0.03 * cm_to_px_x;
        dotSpeed = 1.75 * cm_to_px_x;
        direction = trial_direction * Math.PI / 180;

        // --- 初始化一个 dot ---
        const r = Math.sqrt(Math.random()) * fieldRadius;
        const a = Math.random() * 2 * Math.PI;
        const x = fieldCenterX + r * Math.cos(a);
        const y = fieldCenterY + r * Math.sin(a);
        dot = new Dot(x, y, dotRadius, dotSpeed, direction);

        // --- 相位包络结构（预期：random → coherent → random）---
        envelope = new PhaseEnvelope(200, 800, 200); // 单位：毫秒

        // --- 创建 canvas ---
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.width = window.innerWidth;
          canvas.height = window.innerHeight;
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "1000";
          document.body.appendChild(canvas);
          window.rdkCanvas = canvas;
          window.ctx = canvas.getContext("2d");
        }
        canvas = window.rdkCanvas;
        ctx = window.ctx;

        // 启动计时
        startTime = performance.now();
      Each JS Frame:
        const now = performance.now();
        const elapsed = now - startTime;
        const dt = 1 / 60;

        // 获取当前 phase：random / coherent
        const phase = envelope.getPhase(elapsed);

        // 更新 dot 行为
        dot.updateDirection(dt, phase);

        // 绘制背景
        ctx.clearRect(0, 0, canvas.width, canvas.height);
        ctx.fillStyle = "#888";
        ctx.beginPath();
        ctx.arc(fieldCenterX, fieldCenterY, fieldRadius, 0, 2 * Math.PI);
        ctx.fill();

        // 绘制 dot
        dot.draw(ctx);

        // 实验结束控制
        if (envelope.isFinished(elapsed)) {
          continueRoutine = false;
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
    CodeComponent var_3phase360
      Code Type = JS
      disabled = True
      Before JS Experiment:
        class Dot {
          constructor(x, y, radius, speed, direction) {
            this.x = x;
            this.y = y;
            this.radius = radius;
            this.speed = speed;
            this.theta = Math.random() * 2 * Math.PI;
            this.fixedDir = direction;
          }

          updateDirection(dt, mode) {
            if (mode === "coherent") {
              this.move(this.fixedDir, dt);
            } else {
              this.theta += (Math.random() - 0.5) * 0.3; // 可调噪声方向偏移幅度
              this.move(this.theta, dt);
            }
          }

          move(theta, dt) {
            this.x += this.speed * dt * Math.cos(theta);
            this.y += this.speed * dt * Math.sin(theta);
            const dx = this.x - fieldCenterX;
            const dy = this.y - fieldCenterY;
            const dist2 = dx * dx + dy * dy;
            if (dist2 > fieldRadius * fieldRadius) {
              const angle = Math.atan2(dy, dx) + Math.PI;
              const r = fieldRadius * Math.sqrt(Math.random());
              this.x = fieldCenterX + r * Math.cos(angle);
              this.y = fieldCenterY + r * Math.sin(angle);
              this.theta = Math.random() * 2 * Math.PI;
            }
          }

          draw(ctx) {
            ctx.beginPath();
            ctx.arc(this.x, this.y, this.radius, 0, 2 * Math.PI);
            ctx.fillStyle = "white";
            ctx.fill();
          }
        }

        class RampEnvelope {
          constructor(start = 0.0, peak = 0.7, pre = 200, rampUp = 60, plateau = 800, rampDown = 60, post = 200) {
            this.start = start;
            this.peak = peak;
            this.t1 = pre;
            this.t2 = pre + rampUp;
            this.t3 = this.t2 + plateau;
            this.t4 = this.t3 + rampDown;
            this.t5 = this.t4 + post;
          }

          getCoherence(t) {
            if (t < this.t1) return this.start;
            if (t < this.t2) return this.start + (this.peak - this.start) * ((t - this.t1) / (this.t2 - this.t1));
            if (t < this.t3) return this.peak;
            if (t < this.t4) return this.peak - (this.peak - this.start) * ((t - this.t3) / (this.t4 - this.t3));
            return this.start;
          }

          isFinished(t) {
            return t >= this.t5;
          }
        }
      Begin JS Routine:
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        fieldRadius = 3.5 * cm_to_px_x;
        fieldCenterX = window.innerWidth / 2;
        fieldCenterY = window.innerHeight / 2;
        dotRadius = 0.03 * cm_to_px_x;
        dotSpeed = 1.75 * cm_to_px_x;
        direction = trial_direction * Math.PI / 180;
        numDots = 360;
        let coh = parseFloat(Coherence1);

        // 初始化 dot 阵列
        dots = [];
        for (let i = 0; i < numDots; i++) {
          const r = Math.sqrt(Math.random()) * fieldRadius;
          const a = Math.random() * 2 * Math.PI;
          const x = fieldCenterX + r * Math.cos(a);
          const y = fieldCenterY + r * Math.sin(a);
          dots.push(new Dot(x, y, dotRadius, dotSpeed, direction));
        }

        // coherence 包络（五阶段）
        globalEnvelope = new RampEnvelope(0, coh, 200, 60, 800, 60, 200);

        // 创建 Canvas
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.width = window.innerWidth;
          canvas.height = window.innerHeight;
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "1000";
          document.body.appendChild(canvas);
          window.rdkCanvas = canvas;
          window.ctx = canvas.getContext("2d");
        }
        canvas = window.rdkCanvas;
        ctx = window.ctx;

        // 启动计时
        startTime = performance.now();
      Each JS Frame:
        const now = performance.now();
        const elapsed = now - startTime;
        const dt = 1 / 60;

        const coherence = globalEnvelope.getCoherence(elapsed);
        const numCoherent = Math.floor(coherence * dots.length);

        // 清空背景 & 画灰色区域
        ctx.clearRect(0, 0, canvas.width, canvas.height);
        ctx.fillStyle = "#888";
        ctx.beginPath();
        ctx.arc(fieldCenterX, fieldCenterY, fieldRadius, 0, 2 * Math.PI);
        ctx.fill();

        // 随机打乱 dot 顺序（避免同一批点总是 signal）
        const shuffled = dots.slice();
        for (let i = shuffled.length - 1; i > 0; i--) {
          const j = Math.floor(Math.random() * (i + 1));
          [shuffled[i], shuffled[j]] = [shuffled[j], shuffled[i]];
        }

        // 更新和绘制每个点
        for (let i = 0; i < shuffled.length; i++) {
          const mode = (i < numCoherent) ? "coherent" : "random";
          shuffled[i].updateDirection(dt, mode);
          shuffled[i].draw(ctx);
        }

        // 自动结束
        if (globalEnvelope.isFinished(elapsed)) {
          continueRoutine = false;
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
    CodeComponent Dot_1
      Code Type = JS
      Before JS Experiment:
        class Dot {
          constructor(x, y, radius, speed, direction) {
            this.x = x;
            this.y = y;
            this.radius = radius;
            this.speed = speed;
            this.mode = "noise";  // 默认值

            //const blend = 0.1;  // 插值权重，越小越平滑
            //this.theta = (1 - blend) * this.theta + blend * this.fixedDir;

           // const noiseScale = 0.3;
            //this.theta += (Math.random() - 0.5) * noiseScale;
            this.theta = Math.random() * 2 * Math.PI;
            this.fixedDir = direction;  // coherent motion direction
            this.noiseBias = (Math.random() - 0.5) * Math.PI;  // ±90° 偏置
            //this.maxLife = 180+ Math.floor(Math.random() *20);  // 30–90 帧寿命
            this.life = Math.floor(Math.random() * this.maxLife);  // 随机 phase
          }

        updateDirection(dt) {
          if (this.mode === "coherent") {
            this.move(this.fixedDir, dt);
          } else {
           this.theta = Math.random() * 2 * Math.PI;
        this.move(this.theta, dt);

          }
        }


          move(theta, dt) {
            this.x += this.speed * dt * Math.cos(theta);
            this.y += this.speed * dt * Math.sin(theta);

            // ⭕ Wrap：点超出边界则从对侧重新进入
            const dx = this.x - fieldCenterX;
            const dy = this.y - fieldCenterY;
            if (dx * dx + dy * dy > fieldRadius * fieldRadius) {
              const angle = Math.atan2(dy, dx) + Math.PI;
              const r = fieldRadius * Math.sqrt(Math.random());
              this.x = fieldCenterX + r * Math.cos(angle);
              this.y = fieldCenterY + r * Math.sin(angle);
              this.theta = Math.random() * 2 * Math.PI;
            }

            // 🧬 Dot life 机制：过期后自动重生
            this.life -= 1;
            if (this.life <= 0) {
              const angle = Math.random() * 2 * Math.PI;
              const r = fieldRadius * Math.sqrt(Math.random());
              this.x = fieldCenterX + r * Math.cos(angle);
              this.y = fieldCenterY + r * Math.sin(angle);
              this.theta = Math.random() * 2 * Math.PI;
              this.life = this.maxLife;
              this.noiseBias = (Math.random() - 0.5) * Math.PI;  // 重新随机化个体偏置
            }
          }

          draw(ctx) {
            ctx.beginPath();
            ctx.arc(this.x, this.y, this.radius, 0, 2 * Math.PI);
            ctx.fillStyle = "white";
            ctx.fill();
          }
        }

        class RampEnvelope {
          constructor(start = 0.0, peak = 0.7, pre = 200, rampUp = 60, plateau = 800, rampDown = 60, post = 200) {
            this.start = start;
            this.peak = peak;
            this.t1 = pre;
            this.t2 = this.t1 + rampUp;
            this.t3 = this.t2 + plateau;
            this.t4 = this.t3 + rampDown;
            this.t5 = this.t4 + post;
          }

          getCoherence(t) {
            if (t < this.t1) return this.start;
            if (t < this.t2) return this.start + (this.peak - this.start) * ((t - this.t1) / (this.t2 - this.t1));
            if (t < this.t3) return this.peak;
            if (t < this.t4) return this.peak - (this.peak - this.start) * ((t - this.t3) / (this.t4 - this.t3));
            return this.start;
          }
           getSpeedFactor(t) {
          const coh = this.getCoherence(t);  // 利用已有函数
          // 假设 plateau 区间用 full speed = 1.0
          // ramp 阶段逐渐从 0.6 ~ 1.0
          if (coh <= 0.1) return 1;
          return 0.8 + 0.2 * (coh / this.peak) ;  // [0.6 ~ 1.0]0.8 + 0.2 * (coh / this.peak)
        }

          isFinished(t) {
            return t >= this.t5;
          }
        }

        function getPerceptualSpeed(baseSpeed, coherence) {
          const scale = 1   ;  // 0.3 → 1.04, 0.7 → 0.96
          return baseSpeed * scale;
        }
        function assignDotModes(dots, coherence) {
          const nSignal = Math.round(dots.length * coherence);
          const indices = [...Array(dots.length).keys()];
          for (let i = indices.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1));
            [indices[i], indices[j]] = [indices[j], indices[i]];
          }
          const signalIndices = indices.slice(0, nSignal);

          for (let i = 0; i < dots.length; i++) {
            dots[i].mode = signalIndices.includes(i) ? "coherent" : "noise";
          }
        }

        function perceptualSpeedCompensation(baseSpeed, coherence) {
          const k = 0.7;  // 补偿因子
          if (coherence <= 0.1) {
            return baseSpeed;  // coherence 太低，不补偿
          } else {
            return baseSpeed * (1 + k * (0.7 - coherence));
            // coherence=0.7 → 无补偿，coherence=0.3 → 有补偿
          }
        }
      Begin JS Routine:
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        fieldRadius = 3.5 * cm_to_px_x;
        fieldCenterX = window.innerWidth / 2;
        fieldCenterY = window.innerHeight / 2;
        dotRadius = 0.03 * cm_to_px_x;
        dotSpeed = 2 * cm_to_px_x;
        direction = trial_direction * Math.PI / 180;
        numDots = 360;
        let coh =parseFloat(Coherence1);//

        let rampDur = (coh === 0.3) ? 60 : (coh === 0.7 ? 30 : 45);
        let timeDur = parseFloat(TimeDur) * 1000 - rampDur;
        // 创建 dot 阵列
        dots = [];
        for (let i = 0; i < numDots; i++) {
          const r = Math.sqrt(Math.random()) * fieldRadius;
          const a = Math.random() * 2 * Math.PI;
          const x = fieldCenterX + r * Math.cos(a);
          const y = fieldCenterY + r * Math.sin(a);
          dots.push(new Dot(x, y, dotRadius, dotSpeed, direction));
        }

        // coherence 包络结构
        globalEnvelope = new RampEnvelope(0, coh, 500, rampDur, timeDur, rampDur, 500);

        // Canvas 初始化（仅一次）
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.width = window.innerWidth;
          canvas.height = window.innerHeight;
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "1000";
          document.body.appendChild(canvas);
          window.rdkCanvas = canvas;
          window.ctx = canvas.getContext("2d");
        }
        canvas = window.rdkCanvas;
        ctx = window.ctx;

        // 启动计时器
        startTime = performance.now();
      Each JS Frame:
        const now = performance.now();
        const elapsed = now - startTime;
        const dt = 1 / 60;
        let coh = parseFloat(Coherence1);
        const coherence = globalEnvelope.getCoherence(elapsed);
        const speedFactor = globalEnvelope.getSpeedFactor(elapsed);
        const adjustedSpeed = dotSpeed * speedFactor;

        // ⬇️ 每帧统一分配 coherent / noise 点（避免每个点独立随机）
        assignDotModes(dots, coherence);

        // 清空画布（透明）
        ctx.clearRect(0, 0, canvas.width, canvas.height);

        let totalSpeed = 0;
        let validDots = 0;

        for (let i = 0; i < dots.length; i++) {
          const prevX = dots[i].x;
          const prevY = dots[i].y;
         //dots[i].speed = dotSpeed;  // 所有点速度一致 dots[i].speed = adjustedSpeed;
         const compensatedSpeed = perceptualSpeedCompensation(dotSpeed, coherence);
         dots[i].speed = compensatedSpeed;


          dots[i].updateDirection(dt);  // ✅ 只用 dot 自带的 this.mode 属性
          dots[i].draw(ctx);

          const dx = dots[i].x - prevX;
          const dy = dots[i].y - prevY;
          const dist = Math.sqrt(dx * dx + dy * dy);
          if (dist < fieldRadius * 0.5) {
            totalSpeed += dist / dt;
            validDots += 1;
          }
        }

        const avgSpeed = validDots > 0 ? totalSpeed / validDots : 0;

        console.log(`t=${elapsed.toFixed(0)}ms | coh=${coherence.toFixed(2)} | avgSpeed=${avgSpeed.toFixed(2)} px/s`);

        if (globalEnvelope.isFinished(elapsed)) {
          continueRoutine = false;
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
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  Routine exit_routine
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait while we save your results...
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    CodeComponent code_6
      Code Type = JS
      Begin JS Routine:
        // 显示鼠标
        document.body.style.cursor = "default";
        psychoJS._saveResults = false;
        let participant = expInfo['participant'];  // 从 info dialog 获取参与者编号
        let now = new Date();
        let today = new Date();
        let dateStr = today.toISOString().split('T')[0];
        let timeStr = now.toTimeString().split(' ')[0].replace(/:/g, '-');  // '14-52-30'
        let filename = `${participant}_${dateStr}_${timeStr}.csv`;


        // 提取数据
        let trialsData = psychoJS._experiment._trialsData;


        if (!trialsData || trialsData.length === 0) {
          console.warn("No trial data found.");
        } else {
          const headers = [...new Set(trialsData.flatMap(t => Object.keys(t)))];

          function csvSafe(val) {
            if (val === undefined || val === null) return '';
            const str = val.toString();
            if (/["\n,]/.test(str)) {
              return `"${str.replace(/"/g, '""')}"`;
            }
            return str;
          }

          const csvContent = [
            headers.join(','),
            ...trialsData.map(row =>
              headers.map(h => csvSafe(row[h])).join(',')
            )
          ].join('\n');

          console.log('Saving data...');
          uploadToOSF(filename, csvContent);
        }

        // 将上传封装为单独函数
        function uploadToOSF(filename, csvData) {
          fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
              'Content-Type': 'application/json',
              'Accept': '*/*'
            },
            body: JSON.stringify({
              experimentID: "gsfL5F6Yysoa",
              filename: filename,
              data: csvData,
            })
          })
          .then(function(response) {
            return response.json();
          })
          .then(function(data) {
            console.log("上传成功:", data);
            quitPsychoJS();
          })
          .catch(function(err) {
            console.error("上传失败:", err);
            quitPsychoJS();
          });
        }
      End JS Routine:
        document.body.style.cursor = "none";
Flow
  Routine Scale_setup
  LoopInitiator trials_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = show_keys
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    Routine screen_scale_keys
    Routine rectangel_keys
  LoopTerminator trials_2
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.csv
    loopType = random
    nReps = 9
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    conditions:
      [OrderedDict([('TimeDur', 0.8), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.0), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.2), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.4), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.6), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 0.8), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.0), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.2), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.4), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.6), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 0.8), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.0), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.2), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.4), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.6), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 0.8), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.0), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.2), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.4), ('Coherence1', 0.7), ('TrialType', 'Time')])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
    Routine block
    Routine ITI
    Routine Mask_2
    Routine encoding
    Routine Mask_2
    Routine ITI
    Routine Cue
    Routine Response
    Routine Feedback_Time
  LoopTerminator trials
  Routine exit_routine
